CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<TimePoint>.*)_(?P<Well>.*)_(?P<Point>.*)_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "350DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "Phal 647")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.25,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:6|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
    Select the input image:Ki67
    Name the output image:Threshold_Ki67
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:7|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
    Select objects to be masked:Nuclei
    Name the masked objects:Ki67_poscells
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:Threshold_Ki67
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:8|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notes:['In addition to colocalization, the intensity of the PH3 probe can be used to classify cells. The intensity can be measured within each nuclei object.']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
    Select images to measure:Ki67
    Select objects to measure:Ki67_poscells

GrayToColor:[module_num:9|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
    Select a color scheme:RGB
    Rescale intensity:Yes
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    Select the image to be colored green:Ki67
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    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#E04EE0
    Select objects to display:Nuclei

OverlayOutlines:[module_num:11|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notes:['The intensity measurements can be exported into a spreadsheet, but sometimes a useful way to process the measurements is to see them overlayed on top of the objects of interest, in this the nuclei.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:NucleiOverlay
    Name the output image:Ki67Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#12E60D
    Select objects to display:Ki67_poscells

DisplayDataOnImage:[module_num:12|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notes:["We'll choose a threshold for the intensity that determines if a cell is mitotic or not. The MaxIntensity is an effective measurement, since the probe itself is so specific."]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
    Display object or image measurements?:Object
    Select the input objects:Ki67_poscells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Ki67Overlay
    Text color:magenta
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:Ki67Overlay
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Ki67Overlay3
    Number of digits:4
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|OneDrive - TU Eindhoven\\Afstuderen\\Thesis\\Figures\\Materials and methods\\better imeges analysis proliferation rate
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|OneDrive - TU Eindhoven\\Afstuderen\\Results\\2. Time Curve HDF CCL2\\repeat 2\\Immunofluorescence\\Proliferation rate\\Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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